<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule">
        <parameter name="File names">
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL1_1.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL1_2.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL1_3.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL2_1.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL2_2.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL2_3.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL3_1.mzML</file>
            <file>D:\Projects\Abzer\ChemProp2\ChemProp_Experiment_1_Data\AL3_2.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">100000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Min group size in # of scans">4</parameter>
        <parameter name="Group intensity threshold">200000.0</parameter>
        <parameter name="Min highest intensity">300000.0</parameter>
        <parameter name="Scan to scan accuracy (m/z)">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">resolved</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.02</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Limit by RT edges">true</parameter>
            <parameter name="Combine MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Lock to feature mobility range">false</parameter>
            <parameter name="Minimum merged intensity (IMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.8</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.04</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">300000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.5</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.02</min>
            <max>3.0</max>
        </parameter>
        <parameter name="Min # of data points">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">3samples</parameter>
        <parameter name="Minimum features in a row (abs or %)" selected="true">3.0</parameter>
        <parameter name="Minimum features in an isotope pattern" selected="true">2</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum data points">2</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>D:\Projects\Abzer\ChemProp2\20220517_Asulam_Test_MZmine3_1\20220517_Chemprop2_MZmine3_GNPS_test1</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Feature intensity">Peak area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>
